PsychoPy2experiment version="2020.2.4"
Settings
  Completed URL = $"https://baselpsychology.eu.qualtrics.com/jfe/form/SV_ex5XiuuQyvrh7ts?id=" + expInfo['participant']
  Experiment info = {'participant': ''}
  Full-screen window = True
  Incomplete URL = about:blank
  Monitor = testMonitor
  Save excel file = True
  Save log file = False
  Screen = 1
  Show info dlg = False
  Units = pix
  Window size (pixels) = [1280, 720]
  color = white
  expName = Project 2 Experiment 1
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Routines
  Routine feedback
  Routine part
    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        np.random.choice(12,size=6,replace=False)
  Routine rest
    TextComponent restintro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Take a break for one minute.

        Or

        Please press "SPACE" to continue if you are ready.
    KeyboardComponent restintro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine obsertrial
    TextComponent fixation1
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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    TextComponent label1
      letterHeight = 0.07
      pos = (0,-0.35)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 5
      text [set every repeat] = $label
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    ImageComponent stimuli1
      image [set every repeat] = $sti
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 5
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    TextComponent blank1
      letterHeight = 0.1
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 0.4
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  Routine blank2
    TextComponent blank_phase2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = &nbsp;
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  Routine consent2
    TextComponent con2
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        DO I HAVE TO TAKE PART IN THE STUDY? Your participation in this research is voluntary. If you decide to participate in the study, you may withdraw your consent and stop participating at any time without penalty or loss of benefits to which you are otherwise entitled.
        WHO WILL SEE THE INFORMATION THAT I GIVE? We will keep private all research records that identify you, to the extent allowed by law.
        Your information will be combined with information from other people taking part in the study. When we write about the study to share it with other researchers, we will write about the combined information we have gathered. You will not be identified in these written materials. We may publish the results of this study; however, we will keep you name and other identifying information private. The only exceptions to this are if we are asked to share the research files for audit purposes with the CSU Institutional Review Board ethics committee, if necessary. Your identity/record of receiving compensation (NOT your data) may be made available to CSU officials for financial audits.
        WILL I RECEIVE ANY COMPENSATION FOR TAKING PART IN THIS STUDY? If you are participating in exchange for credit for one of your psychology classes, you will receive one half research credit for each half hour that you participate in the experiment. At certain times of the year (such as during the summer), participants can sign up in exchange for payment, rather than for research credit. If you signed up in exchange for payment, you will receive 10 dollar for an experiment up to one-hour in length, and 5 dollar for each additional half hour if the study last longer than one hour.
        WHAT HAPPENS IF I AM INJURED BECAUSE OF THE RESEARCH? The Colorado Governmental Immunity Act determines and may limit Colorado State University's legal responsibility if an injury happens because of this study. Claims against the University must be filed within 180 days of the injury.
        WHAT IF I HAVE QUESTIONS? Before you decide whether to accept this invitation to take part in the study, please ask any questions that might come to mind now. Later, if you have questions about the study, you can contact the investigator, Carol Seger at (970) 491-3540. If you have any questions about your rights as a volunteer in this research, contact the CSU IRB at:  RICRO_IRB@mail.colostate.edu; 970-491-1553.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent con2_red
      color = red
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = If you agree to attend the experiment, please press the "SPACE" to begin the experiment.
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  Routine pretrain
    TextComponent pretrainText
      color = black
      font = $font
      letterHeight = $fontSize
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = $fontWrap
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      text:
        Your aim is to correctly guess which category the figures belong to by pressing the ‘e’ or ‘i’ key. After your key press you will get feedback about your categorization. You can continue to look at the figure and the feedback for one second before the next figure appears.

        Your task in this experiment is to learn to consistently assign the figures to the correct category.

        Please press the spacebar to continue.
    KeyboardComponent pretrainResp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine pretest
    TextComponent pretestText
      color = black
      font = $font
      letterHeight = $fontSize
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = $fontWrap
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      text:
        In the following trials you will not receive feedback anymore. Please assign each figure to the category to which the figure most likely belongs.

        Please press the spacebar to begin.
    KeyboardComponent pretestResp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine ending
    TextComponent demoText
      color = black
      font = $font
      letterHeight = $fontSize
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = $fontWrap
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      text:
        You have completed the categorization task.

        Press the spacebar to move on to the demographic questionnaire and please fill it out.
    KeyboardComponent demoResp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine train
    CodeComponent trainCode
      Code Type = Both
      Begin Experiment:
        # Starts counters for trials and responses
        trialCounter = 0
        correctResp = []

        intertrial = 0.5
      Begin JS Experiment:
        // Starts counters for trials and responses
        trialCounter = 0;
        correctResp = [];

        intertrial = 0.5;
      Begin JS Routine:
        // Initializes path to stim
        path = ((fRandom + "/") + stim);

        // Sets intertrial for first trial
        if ((trialCounter === 0)) {
            begin = intertrial;
            alertMessage = "Please categorize with the 'e' or 'i' key.";
            alertBegin = 5;
        } else {
            begin = 0;
            alertMessage = "";
            alertBegin = 0;
        }
      Begin Routine:
        # Initializes path to stim
        path = fRandom + "/" + stim

        # Sets intertrial for first trial
        if trialCounter == 0:
            begin = intertrial
            alertMessage = "Please categorize with the 'e' or 'i' key."
            alertBegin = 5
        else:
            begin = 0
            alertMessage = ""
            alertBegin = 0
    ImageComponent trainStim
      image [set every repeat] = $path
      saveStartStop = False
      size = 250
      startVal [time (s)] = begin
      stopVal [condition] = stimInvisible
      units = pix
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    KeyboardComponent trainResp
      allowedKeys = 'e', 'i'
      correctAns = $correctKey
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = begin
      stopVal [condition] = stimInvisible
      store = first key
      storeCorrect = True
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    CodeComponent fbCode
      Code Type = Both
      Begin JS Routine:
        // Initializes response and correct keys
        correctKey = keys[Math.abs((cReverse - c))];
        trainResp.keys = [];

        // Initializes feedback message
        keyPressed = false;
        stimInvisible = false;
        msgOffset = false;
        corrOpacity = 0;
        wrongOpacity = 0;
      Begin Routine:
        # Initializes response and correct keys
        correctKey = keys[abs(cReverse-c)]
        trainResp.keys = []

        # Initializes feedback message
        keyPressed = False
        stimInvisible = False
        msgOffset = False
        corrOpacity = 0
        wrongOpacity = 0
      Each Frame:
        # Displays feedback if key is pressed
        if (not keyPressed) and len(trainResp.keys) > 0:
            if trainResp.corr:
                corrOpacity = 1
            else:
                wrongOpacity = 1

            offTime = t + 1.0
            trialEnd = offTime + intertrial
            keyPressed = True
            alertBegin = t

        if keyPressed:
            if t > offTime:
                corrOpacity = 0
                wrongOpacity = 0
                stimInvisible = True

            if t > trialEnd:
                msgOffset = True
      Each JS Frame:
        // Displays feedback if key is pressed
        if (((! keyPressed) && (trainResp.keys.length > 0))) {
            if (trainResp.corr) {
                corrOpacity = 1;
            } else {
                wrongOpacity = 1;
        }

            offTime = t + 1.0;
            trialEnd = offTime + intertrial;
            keyPressed = true;
            alertBegin = t;
        }

        if ((keyPressed)) {
            if ((t > offTime)) {
                corrOpacity = 0;
                wrongOpacity = 0;
                stimInvisible = true;
            }
            if ((t > trialEnd)) {
                msgOffset = true;
            }
        }
      End JS Routine:
        // Updates counters for trials and responses
        correctResp.push(trainResp.corr);
        trialCounter = (trialCounter + 1);
      End Routine:
        # Updates counters for trials and responses
        correctResp.append(trainResp.corr)
        trialCounter = trialCounter + 1
    TextComponent correctText
      color = dimgrey
      font = $font
      letterHeight = 14
      opacity [set every frame] = $corrOpacity
      pos = (2, -135)
      saveStartStop = False
      stopVal [condition] = $msgOffset
      text = Correct!
      units = pix
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    TextComponent wrongText
      color = dimgrey
      font = $font
      letterHeight = 14
      opacity [set every frame] = $wrongOpacity
      pos = (2, -135)
      saveStartStop = False
      stopVal [condition] = $msgOffset
      text = Incorrect!
      units = pix
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    ImageComponent correctStim
      image = correct.png
      opacity [set every frame] = $corrOpacity
      pos = (2, -105)
      saveStartStop = False
      size = (30, 30)
      stopVal [condition] = $msgOffset
      units = pix
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    ImageComponent wrongStim
      image = wrong.png
      opacity [set every frame] = $wrongOpacity
      pos = (2, -105)
      saveStartStop = False
      size = (30, 30)
      stopVal [condition] = $msgOffset
      units = pix
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    ImageComponent blankStim
      image = blank.png
      pos = (2, -110)
      saveStartStop = False
      size = (60, 60)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = begin
      units = pix
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    CodeComponent endLearn
      Code Type = Both
      Each Frame:
        #if 'x' and 'n' and 'q' and 'p' in event.getKeys():
        #    traintrials.finished = True
      Each JS Frame:
        //var _pj;
        //function _pj_snippets(container) {
        //    function in_es6(left, right) {
        //        if (((right instanceof Array) || ((typeof right) === "string"))) {
        //            return (right.indexOf(left) > (- 1));
        //        } else {
        //            if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
        //                return right.has(left);
        //            } else {
        //                return (left in right);
        //            }
        //        }
        //    }
        //    container["in_es6"] = in_es6;
        //    return container;
        //}
        //_pj = {};
        //_pj_snippets(_pj);
        //if (((("x" && "n") && "q") && _pj.in_es6("p", psychoJS.eventManager.getKeys()))) {
        //    traintrials.finished = true;
        //}
    TextComponent alert
      color = black
      font = $font
      letterHeight = 14
      pos = (0, 200)
      saveStartStop = False
      startVal [time (s)] = $alertBegin
      stopVal [condition] = $keyPressed
      text [set every repeat] = $alertMessage
      units = pix
      wrapWidth = 1000
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  Routine test
    CodeComponent testCode
      Code Type = Auto->JS
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      Begin Routine:
        path = fRandom + "/" + stim
    ImageComponent testStim
      image [set every repeat] = $path
      saveStartStop = False
      size = 250
      startVal [time (s)] = intertrial
      units = pix
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    KeyboardComponent testResp
      allowedKeys = 'e', 'i'
      correctAns = $answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = intertrial
      store = first key
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  Routine accuracy
    TextComponent accText
      color = black
      font = $font
      letterHeight = $fontSize
      saveStartStop = False
      stopVal [condition] = accOffset
      text [set every frame] = $accMsg
      wrapWidth = $fontWrap
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    KeyboardComponent accResp
      allowedKeys = ['space']
      correctAns = $answer
      forceEndRoutine = False
      saveStartStop = False
      stopVal [condition] = accOffset
      store = nothing
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    CodeComponent accCode
      Code Type = Both
      Begin Experiment:
        nAccuracy = 50 # accuracy shown all x trials
        accCrit = 90 # criterion for going to test phase
        maxTrials = 1280 # maximal number of training trials
      Begin JS Experiment:
        nAccuracy = 50; // accuracy shown all x trials
        accCrit = 90; // criterion for going to test phase
        maxTrials = 1280; // maximal number of training trials
      Begin JS Routine:
        // Initializes bools
        keyPressed = false;
        accResp.keys = [];
        accMsg = "";

        // Computes accuracy of last 2 * nAccuracy trials
        x = correctResp.slice((- (2 * nAccuracy)));
        acc = Math.round(100 * eval(x.join('+')) / x.length);

        if (((acc > accCrit) && (trialCounter > (2 * nAccuracy)))) {
            traintrials.finished = true;
        } else {
            if ((trialCounter === maxTrials)) {
                traintrials.finished = true;
            } else {
                accMsg = `If you continue like this you will be on average ${acc}% correct; it is possible to be 100% correct.\nPlease stay concentrated and try to improve.\nYour goal is to classify every figure correctly.\n\nPress the spacebar to continue learning.`;
            }
        }

        // Checks if accuracy message should be displayed
        if ((((trialCounter % nAccuracy) === 0) && (trialCounter !== nAccuracy) && (trialCounter !== maxTrials))) {
            accOffset = false;
        } else {
            accOffset = true;
        }
      Begin Routine:
        # Initializes bools
        keyPressed = False
        accResp.keys = []
        accMsg = ""

        # Computes accuracy of last 2 * nAccuracy trials
        acc = np.mean(correctResp[-(2*nAccuracy):]) * 100.0


        if acc > accCrit and trialCounter > 2*nAccuracy:
            traintrials.finished = True
        else:
            if trialCounter == maxTrials:
                traintrials.finished = True
            else:
                accMsg = "If you continue like this you will be on average %d percent correct; it is possible to be 100 percent correct. Please stay concentrated and try to improve.\nYour goal is to classify every figure correctly.\n\nPress the spacebar to continue learning." % (acc)

        # Checks if accuracy message should be displayed
        if (trialCounter % nAccuracy) == 0 and trialCounter != nAccuracy and trialCounter != maxTrials:
            accOffset = False
        else:
            accOffset = True
      Each Frame:
        # Displays feedback if key is pressed
        if (not keyPressed) and len(accResp.keys) > 0:
            accMsg = ""
            trialEnd = t + intertrial
            keyPressed = True

        if keyPressed and t > trialEnd:
            accOffset = True
      Each JS Frame:
        // Displays feedback if key is pressed
        if (((! keyPressed) && (accResp.keys.length > 0))) {
            accMsg = "";
            trialEnd = t + intertrial;
            keyPressed = true;
        }

        if ((keyPressed && (t > trialEnd))) {
            accOffset = true;
        }
      End JS Routine:
        //if (((trialCounter === maxTrials) && (acc <= accCrit))) {
        //    return quitPsychoJS('', true);
        //}
      End Routine:
        #if trialCounter == maxTrials and acc <= accCrit:
        #    core.quit()
  Routine familiarization
    CodeComponent famCode
      Code Type = Both
      Begin Experiment:
        # Font and size
        font = "Helvetica"
        fontSize = 18
        fontWrap = 800

        # Category-key randomization
        keys = ['e', 'i']
        if randint(0, 2) == 0:
            cReverse = False # e is 0, i is 1
            kRandom = 'eis0'
        else:
            cReverse = True # i is 0, e is 1
            kRandom = 'eis1'

        # Abstract-visual feature randomization
        fRandom = ['f1issize', 'f1isangle']
        fRandom = fRandom[randint(0, 2)]

        thisExp.addData('randomization.features', fRandom)
        thisExp.addData('randomization.key', kRandom)
      Begin JS Experiment:
        // Participant information
        queryString = window.location.search;
        urlParams = new URLSearchParams(queryString);
        id = urlParams.get('participant');

        document.body.style.cursor='none';

        // Font and size
        font = "Helvetica";
        fontSize = 18;
        fontWrap = 800;

        // Category-key randomization
        keys = ["e", "i"];
        if ((Math.round(Math.random()) === 0)) {
            cReverse = false; // e is 0, i is 1
            kRandom = "eis0";
        } else {
            cReverse = true; // i is 0, e is 1
            kRandom = "eis1";
        }

        // Abstract-visual feature randomization
        fRandom = ["f1issize", "f1isangle"];
        fRandom = fRandom[Math.round(Math.random())];

        psychoJS.experiment.addData('randomization.feature', fRandom);
        psychoJS.experiment.addData('randomization.key', kRandom);
      Begin JS Routine:
        path = ((fRandom + "/") + stim);
      Begin Routine:
        path = fRandom + "/" + stim
    TextComponent famText
      color = black
      font = $font
      letterHeight = $fontSize
      pos = (0, 150)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = To familiarize yourself with the figures (circle size and line orientation), please press the spacebar several times and look carefully at the figure.
      wrapWidth = fontWrap
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    ImageComponent famStim
      image [set every repeat] = $path
      saveStartStop = False
      size = 250
      units = pix
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    KeyboardComponent famResp
      allowedKeys = ['space']
      correctAns = $answer
      forceEndRoutine = True
      saveStartStop = False
      store = nothing
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  Routine general
    CodeComponent introCode
      Code Type = Both
      Begin Experiment:
        # Font and size
        font = "Helvetica"
        fontSize = 24
        fontWrap = 1000

        # Category-key randomization
        keys = ['e', 'i']
        if randint(0, 2) == 0:
            cReverse = False # e is 0, i is 1
            kRandom = 'eis0'
        else:
            cReverse = True # i is 0, e is 1
            kRandom = 'eis1'

        # Abstract-visual feature randomization
        fRandom = ['f1isangle', 'f1issize']
        fRandom = fRandom[randint(0, 2)]

        thisExp.addData('randomization.features', fRandom)
        thisExp.addData('randomization.key', kRandom)
      Begin JS Experiment:
        // Participant information
        queryString = window.location.search;
        urlParams = new URLSearchParams(queryString);
        id = urlParams.get('participant');

        document.body.style.cursor='none';

        // Font and size
        font = "Helvetica";
        fontSize = 24;
        fontWrap = 1000;

        // Category-key randomization
        keys = ["e", "i"];
        if ((Math.round(Math.random()) === 0)) {
            cReverse = false; // e is 0, i is 1
            kRandom = "eis0";
        } else {
            cReverse = true; // i is 0, e is 1
            kRandom = "eis1";
        }

        // Abstract-visual feature randomization
        fRandom = ["f1isangle", "f1issize"];
        fRandom = fRandom[Math.round(Math.random())];

        psychoJS.experiment.addData('randomization.feature', fRandom);
        psychoJS.experiment.addData('randomization.key', kRandom);
    TextComponent introText
      color = black
      font = $font
      letterHeight = $fontSize
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
      wrapWidth = fontWrap
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    KeyboardComponent introResp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine consent
    CodeComponent participant
      Code Type = Both
      Begin JS Experiment:
        queryString = window.location.search;
        urlParams = new URLSearchParams(queryString);
        id = urlParams.get('participant');

        document.body.style.cursor='none';
    TextComponent consentText
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
      wrapWidth = 1.5
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    KeyboardComponent consentResp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine confirm
    TextComponent confirmText
      color = black
      font = Poppins
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        BESTÄTIGUNG DER EINVERSTÄNDNISERKLÄRUNG
        Ich habe die aufgeführten Bedingungen gelesen und verstanden. Ich hatte genügend Zeit eine Entscheidung zu treffen und nehme an der Studie teil, indem ich die Leertaste drücke.
    KeyboardComponent confirmResp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine pretrain2
    TextComponent pretrainText2
      color = black
      font = $font
      letterHeight = $fontSize
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = $fontWrap
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      text:
        You need to attend to both the circle size and the line orientation to correctly categorize the figures.

        It usually takes a few trials before you start to learn about the figures:
        Please be patient.

        Place your fingers on the ‘e’ and ‘i’ keys and press the spacebar to start.
    KeyboardComponent pretrainResp2
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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  Routine filler
    CodeComponent fillerCode
      Code Type = Auto->JS
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      Begin Routine:
        path = fRandom + "/" + stim
    ImageComponent fillerStim
      image [set every repeat] = $path
      saveStartStop = False
      size = 250
      startVal [time (s)] = intertrial
      units = pix
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    KeyboardComponent fillerResp
      allowedKeys = 'e', 'i'
      correctAns = $answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = intertrial
      store = first key
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Flow
  LoopInitiator famtrials loopType="TrialHandler"
    conditionsFile = familiarization.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stim', 'familiarization/9.png'), ('c', None), ('phase', 'fam')]),
      OrderedDict([('stim', 'familiarization/14.png'), ('c', None), ('phase', 'fam')]),
      OrderedDict([('stim', 'familiarization/15.png'), ('c', None), ('phase', 'fam')]),
      OrderedDict([('stim', 'familiarization/16.png'), ('c', None), ('phase', 'fam')]),
      OrderedDict([('stim', 'familiarization/17.png'), ('c', None), ('phase', 'fam')]),
      OrderedDict([('stim', 'familiarization/16.png'), ('c', None), ('phase', 'fam')]),
      OrderedDict([('stim', 'familiarization/15.png'), ('c', None), ('phase', 'fam')]),
      OrderedDict([('stim', 'familiarization/14.png'), ('c', None), ('phase', 'fam')]),
      OrderedDict([('stim', 'familiarization/9.png'), ('c', None), ('phase', 'fam')]),
      OrderedDict([('stim', 'familiarization/4.png'), ('c', None), ('phase', 'fam')]),
      OrderedDict([('stim', 'familiarization/3.png'), ('c', None), ('phase', 'fam')]),
      OrderedDict([('stim', 'familiarization/2.png'), ('c', None), ('phase', 'fam')]),
      OrderedDict([('stim', 'familiarization/1.png'), ('c', None), ('phase', 'fam')]),
      OrderedDict([('stim', 'familiarization/2.png'), ('c', None), ('phase', 'fam')]),
      OrderedDict([('stim', 'familiarization/3.png'), ('c', None), ('phase', 'fam')]),
      OrderedDict([('stim', 'familiarization/4.png'), ('c', None), ('phase', 'fam')]),
      OrderedDict([('stim', 'familiarization/9.png'), ('c', None), ('phase', 'fam')]),
      OrderedDict([('stim', 'familiarization/10.png'), ('c', None), ('phase', 'fam')])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
    Routine familiarization
  LoopTerminator famtrials
  Routine pretrain
  Routine pretrain2
  LoopInitiator traintrials loopType="TrialHandler"
    conditionsFile = train.csv
    loopType = random
    nReps = 40
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    conditions:
      [OrderedDict([('stim', 'stimuli/1.png'), ('c', 1), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/2.png'), ('c', 1), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/3.png'), ('c', 0), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/4.png'), ('c', 1), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/5.png'), ('c', 0), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/6.png'), ('c', 0), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/7.png'), ('c', 1), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/8.png'), ('c', 0), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/9.png'), ('c', 1), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/10.png'), ('c', 0), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/11.png'), ('c', 1), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/12.png'), ('c', 1), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/13.png'), ('c', 0), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/14.png'), ('c', 1), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/15.png'), ('c', 0), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/16.png'), ('c', 1), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/17.png'), ('c', 1), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/18.png'), ('c', 1), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/19.png'), ('c', 1), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/20.png'), ('c', 1), ('phase', 'train')]),
      OrderedDict([('stim', 'stimuli/21.png'), ('c', 0), ('phase', 'train')])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
    Routine train
    Routine accuracy
  LoopTerminator traintrials
  Routine pretest
  LoopInitiator testtrials loopType="TrialHandler"
    conditionsFile = test.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim', 'stimuli/33.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/34.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/35.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/36.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/37.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/38.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/39.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/40.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/33.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/34.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/35.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/36.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/37.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/38.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/39.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/40.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/33.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/34.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/35.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/36.png'), ('c', None), ('phase', 'test')])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
    Routine test
  LoopTerminator testtrials
  LoopInitiator fillertrials loopType="TrialHandler"
    conditionsFile = filler.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim', 'stimuli/41.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/42.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/43.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/44.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/45.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/46.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/47.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/48.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/49.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/50.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/51.png'), ('c', None), ('phase', 'test')]),
      OrderedDict([('stim', 'stimuli/52.png'), ('c', None), ('phase', 'test')])]
    Routine filler
  LoopTerminator fillertrials
  Routine ending
